OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Audio-Visual Stimulator Emotion Recognition => #1
  Lua Script = C:/Users/Leo/Documents/eeg_hmi/scenarios/stim.lua
  Start Time = 20
  Video Clip Time = 240
  Questions Time = 40
  Rest Time = 30
  Number of Trials = 2
  First Class = OVTK_StimulationId_Label_01
  Second Class = OVTK_StimulationId_Label_02
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#1 -> Identity => #2
#2.Output stream 3 -> Run Command
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
  Command 1 = start C:/Users/Leo/Documents/eeg_hmi/dataset/black.jpg
  Stimulation 2 = OVTK_StimulationId_Label_01
  Command 2 = start C:/Users/Leo/Documents/eeg_hmi/dataset/happiness/1.mp4
  Stimulation 3 = OVTK_StimulationId_Label_02
  Command 3 = start C:/Users/Leo/Documents/eeg_hmi/dataset/sadness/1.mp4
  Stimulation 4 = OVTK_StimulationId_NonTarget
  Command 4 = start C:/Users/Leo/Documents/eeg_hmi/dataset/SAM.png
  Stimulation 5 = OVTK_StimulationId_RestStart
  Command 5 = start C:/Users/Leo/Desktop/Documents/eeg_hmi/dataset/black.jpg
  Stimulation 6 = OVTK_StimulationId_ExperimentStop
  Command 6 = taskkill /im vlc.exe /f
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> 0xc67a01dc Generic stream writer
  Filename = C:/Users/Leo/Desktop/Aislan-14-07
  Use compression = false
Data=#2.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
