OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+git)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Python Stim => #0
  Clock frequency (Hz) = 1
  Script = /home/leonardo/Documents/eeg_hmi/Scripts/python_stim.py
  Stim = OVTK_StimulationId_ExperimentStop
  Start Time = 10
  Video Clip Time = 240
  Questions Time = 40
  Rest Time = 10
  Number of clips = 1
  Type of Emotion = happiness
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Sinus oscillator => #2
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
-> 0xc67a01dc CSV File Writer
  Filename = /home/leonardo/Documents/eeg_hmi/signals/leo-[$core{date}-$core{time}]
  Column separator = ,
  Precision = 10
Signal=#2, Stimulations=#0 -> Generic stream writer
  Filename = /home/leonardo/Documents/eeg_hmi/signals/record-[$core{date}-$core{time}].ov
  Use compression = false

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
