OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

0xc67a01dc Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/
#0.Output stream 3 -> Stimulation listener
  Log level to use = Information
#0.Output stream 2 -> Discrete Wavelet Transform
  Wavelet type = db4
  Wavelet decomposition levels = 5
#0.Output stream 2 -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 0.5
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "First trial" => #5
  Epoch duration (in sec) = 240
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#5.Epoched signal -> Time based epoching => #6
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #9
  Equation = log(1+x)
#6 -> Univariate Statistics => #10
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#9, Input stream 2=#10.Mean, Input stream 3=#10.Variance -> Feature aggregator => #11
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Second trial" => #12
  Epoch duration (in sec) = 240
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#12.Epoched signal -> Time based epoching => #13
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #16
  Equation = log(1+x)
#13 -> Univariate Statistics => #17
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#16, Input stream 2=#17.Mean, Input stream 3=#17.Variance -> Feature aggregator => #18
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Second trial" => #19
  Epoch duration (in sec) = 40
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#19.Epoched signal -> Time based epoching => #20
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #23
  Equation = log(1+x)
#20 -> Univariate Statistics => #24
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#23, Input stream 2=#24.Mean, Input stream 3=#24.Variance -> Feature aggregator => #25
Stimulations=#4.Output stream 2, Features for class 1=#11, Features for class 2=#18, Features for class 3=#25 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/Guilherme-classifier-config.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
