OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Users/Leo/Desktop/seila
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 2 -> Stimulation listener
  Log level to use = Warning
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "First trial" => #4
  Epoch duration (in sec) = 240
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_01
#4.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Second trial" => #10
  Epoch duration (in sec) = 240
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_02
#10.Epoched signal -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #15
Stimulations=#2.Output stream 2, Features for class 1=#9, Features for class 2=#15 -> 0xc67a01dc Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Discrete Wavelet Transform
  Wavelet type = haar
  Wavelet decomposition levels = 3
