OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
Input stream 1=#1, Input stream 2=#0.Stimulations -> Identity => #2
#2.Output stream 1 -> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #5
  Equation = log(1+x)
#2.Output stream 1 -> Univariate Statistics => #6
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Input stream 1=#5, Input stream 2=#6.Mean, Input stream 3=#6.Variance -> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = C:/Users/Leo/Documents/eeg_hmi/scenarios/Guilherme-classifier-config.xml
0xc67a01dc Audio-Visual Stimulator Emotion Recognition => #9
  Lua Script = C:/Users/Leo/Documents/eeg_hmi/scenarios/stim_evaluate.lua
  Start Time = 20
  Video Clip Time = 60
  Number of Trials = 2
  First Class = OVTK_StimulationId_Label_01
  Second Class = OVTK_StimulationId_Label_02
Input stream 2=#0.Signal stream, Input stream 3=#9 -> Identity => #10
#10.Output stream 3 -> Run Command
  Stimulation 1 = OVTK_GDF_Start_Of_Trial
  Command 1 = start C:/Users/Leo/Documents/eeg_hmi/dataset/black.jpg
  Stimulation 2 = OVTK_StimulationId_Label_03
  Command 2 = start C:/Users/Leo/Documents/eeg_hmi/dataset/happiness/2.mp4
  Stimulation 3 = OVTK_StimulationId_Label_04
  Command 3 = start C:/Users/Leo/Documents/eeg_hmi/dataset/sadness/2.mp4
  Stimulation 4 = OVTK_StimulationId_NonTarget
  Command 4 = start C:/Users/Leo/Documents/eeg_hmi/dataset/SAM.png
  Stimulation 5 = OVTK_StimulationId_RestStart
  Command 5 = start C:/Users/Leo/Desktop/Documents/eeg_hmi/dataset/black.jpg
  Stimulation 6 = OVTK_StimulationId_ExperimentStop
  Command 6 = taskkill /im vlc.exe /f
Data=#10.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Targets=#10.Output stream 3, Classifier 1=#8.Labels -> Classifier Accuracy Measure
#10.Output stream 3 -> Stimulation Filter => #15
  Default action = Reject
  Time range begin = 0.000000
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_02
Targets=#15, Classification results=#8.Labels -> Confusion Matrix
  Percentages = true
  Sums = true
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#15 -> Stimulation listener
  Log level to use = Information
#10.Output stream 3 -> Stimulation listener
  Log level to use = Error
